PsychoPy2experiment version="1.83.04"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = untitled
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent image
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $Neutral
      size = [0.7, 0.7]
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    ImageComponent image_2
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $Stimulus
      size = [0.7, 0.7]
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5', '6'
      startVal [time (s)] = 0.0
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    TextComponent text
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        1: Anger
        2: Disgust
        3: Fear
        4: Happiness
        5: Sadness
        6: Surprise
    TextComponent text_3
      text = Neutral
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Thanks
    TextComponent text_4
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The test is finished.

        Thank you for your participation!
  Routine Instr
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Dear participant,
        in this test you will see some pictures of actors expressing six emotions (fear, anger, surprise, sadness, happiness and disgust).
        Some of these expressions are subtle. Your task is to guess which emotions they are expressing.

        In every trial you will see two pictures: to the left, a neutral expression, which can be used as a reference point; to the right, the picture of the emotion that you are to guess.

        Answer using the numbers 1-6. During the test, you will be able to see which number corresponds to which emotion.

        PRESS THE SPACE BAR TO BEGIN
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Stimulus': u'Stimuli/ARANG2.png', 'Neutral': u'Stimuli/ARNEU.png'},
      {'Stimulus': u'Stimuli/ARDIS3.png', 'Neutral': u'Stimuli/ARNEU.png'},
      {'Stimulus': u'Stimuli/ARFEA2.png', 'Neutral': u'Stimuli/ARNEU.png'},
      {'Stimulus': u'Stimuli/ARHAP2.png', 'Neutral': u'Stimuli/ARNEU.png'},
      {'Stimulus': u'Stimuli/ARSAD3.png', 'Neutral': u'Stimuli/ARNEU.png'},
      {'Stimulus': u'Stimuli/ARSUR2.png', 'Neutral': u'Stimuli/ARNEU.png'},
      {'Stimulus': u'Stimuli/EBANG1.png', 'Neutral': u'Stimuli/EBNEU.png'},
      {'Stimulus': u'Stimuli/EBDIS2.png', 'Neutral': u'Stimuli/EBNEU.png'},
      {'Stimulus': u'Stimuli/EBFEA3.png', 'Neutral': u'Stimuli/EBNEU.png'},
      {'Stimulus': u'Stimuli/EBHAP3.png', 'Neutral': u'Stimuli/EBNEU.png'},
      {'Stimulus': u'Stimuli/EBSAD3.png', 'Neutral': u'Stimuli/EBNEU.png'},
      {'Stimulus': u'Stimuli/EBSUR3.png', 'Neutral': u'Stimuli/EBNEU.png'},
      {'Stimulus': u'Stimuli/FFANG3.png', 'Neutral': u'Stimuli/FFNEU.png'},
      {'Stimulus': u'Stimuli/FFDIS2.png', 'Neutral': u'Stimuli/FFNEU.png'},
      {'Stimulus': u'Stimuli/FFFEA2.png', 'Neutral': u'Stimuli/FFNEU.png'},
      {'Stimulus': u'Stimuli/FFHAP3.png', 'Neutral': u'Stimuli/FFNEU.png'},
      {'Stimulus': u'Stimuli/FFSAD1.png', 'Neutral': u'Stimuli/FFNEU.png'},
      {'Stimulus': u'Stimuli/FFSUR2.png', 'Neutral': u'Stimuli/FFNEU.png'},
      {'Stimulus': u'Stimuli/FGANG2.png', 'Neutral': u'Stimuli/FGNEU.png'},
      {'Stimulus': u'Stimuli/FGDIS2.png', 'Neutral': u'Stimuli/FGNEU.png'},
      {'Stimulus': u'Stimuli/FGFEA2.png', 'Neutral': u'Stimuli/FGNEU.png'},
      {'Stimulus': u'Stimuli/FGHAP3.png', 'Neutral': u'Stimuli/FGNEU.png'}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
    Routine trial
  LoopTerminator trials
  Routine Thanks
